PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['sentences.xlsx']
  Screen = 1
  Units = height
  Use version = 2025.2.0
  Window size (pixels) = [1920, 1080]
  expName = 8
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction
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    TextComponent opening
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        实验说明：
        屏幕上会逐词显示一个句子。
        每次看到一个词后，请在下方输入你认为的下一个词。
        输入结束后请按Enter键，下一个词会自动显示。

        按空格键开始实验
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        实验结束，感谢参与！

        窗口将在两秒后自动关闭
  Routine Loop
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        cur_word_idx = 0
        words = sentence.split()
        endClock = core.Clock()
      Each Frame:
        shown_stim = visual.TextStim(
            win,
            text='',
            font='Arial',
            height=0.05,
            color='white',
            pos=(-0.83, 0.37),
            wrapWidth=2,
            alignText='left',
            anchorHoriz='left')
        shown = ' '.join(words[:cur_word_idx+1])
        shown_stim.text = shown
        shown_stim.draw()
        if cur_word_idx < len(words)-1 :
            next_phrase = ' '.join(words[cur_word_idx+1:])
            tmp = visual.TextStim(
                win,
                text='',
                font='Arial',
                height=0.05,
                color='white',
                pos=(-0.83, 0),
                wrapWidth=2,
                alignText='left',
                anchorHoriz='left')
            tmp.text = next_phrase
            char_width_estimate = 0.05
            remaining_width = len(next_phrase) * char_width_estimate
            shown_width = len(shown) * char_width_estimate
            start_x = -0.83
            x_right = start_x + shown_width
            x_center = x_right + remaining_width/2 + 0.01
            y_line = 0.33
            underline_hint = visual.Rect(
                win,
                width = remaining_width, height = 0.004,
                pos=(x_center, y_line),
                fillColor='white'
            )
            underline_hint.draw()
            keys = event.getKeys(keyList=['return'])
            response_instr.draw()
            underline.draw()
            response_textbox.draw()
            end_instr.autoDraw = False
            if keys and 'return' in keys:
                if response_textbox.text != '':
                    response_textbox.setText('')
                    cur_word_idx += 1
                    shown = ' '.join(words[:cur_word_idx+1])
                    shown_stim.draw()
                    endClock.reset()
        elif cur_word_idx >= len(words) - 1 :
            response_instr.autoDraw = False
            underline.autoDraw = False
            response_textbox.autoDraw = False
            end_instr.draw()
            shown_stim.draw()
            if endClock.getTime() >= 1.0:
                continueRoutine = False
      End Routine:
        endClock.reset()
    TextComponent shown_stim
      letterHeight = 0.05
      pos = (-0.83, 0.37)
      wrapWidth = 2
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    TextComponent response_instr
      draggable = True
      letterHeight = 0.044
      pos = (-0.208, -0.185)
      text = 请输入下一个词:
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    PolygonComponent underline
      fillColor = white
      pos = (0.12, -0.222)
      shape = line
      size = (0.3, 0)
      startVal [condition] = 0.0
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    TextboxComponent response_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0.1, -0.185)
      size = (0.2604, 0.0556)
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    TextComponent end_instr
      letterHeight = 0.05
      pos = (0, -0.185)
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      text:
        That\'s the end of this sentence.
        Next sentence would appear after 1s.
    TextComponent tmp
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      pos = (-0.83, 0)
      wrapWidth = 2
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    PolygonComponent underline_hint
      fillColor = white
      pos = (-0.83, 0.37)
      shape = line
      size = (0.3, 0)
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Flow
  Routine instruction
  LoopInitiator SentenceLoop loopType="TrialHandler"
    conditionsFile = sentences.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sentence': '御朱印は 神社に 参拝した 証 として 受け取る ものです'},
      {'sentence': '中国人 など 外国人旅行者 による 店舗での 購入額が 増えている'}]
    LoopInitiator WordLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine Loop
    LoopTerminator WordLoop
  LoopTerminator SentenceLoop
  Routine end
